<?xml version="1.0"?>
<RecipeFile xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
  <Protocol>
    <ChemistryRef Description="cBot Temp Hyb" ChemistryName="CBotTempHyb" />
    <ReadRef Description="Read #1" ReadName="Read1" />
    <ChemistryRef Description="Index Preparation" ChemistryName="IndexPreparation" />
    <ReadRef Description="IndexRead" ReadName="IndexRead" />
    <ChemistryRef Description="End Deblock" ChemistryName="EndDeblock" />
    <ChemistryRef Description="Paired End Turnaround" ChemistryName="PETurnaround" />
    <ReadRef Description="Read #2" ReadName="Read2" />
    <ChemistryRef Description="Post Run Step" ChemistryName="PostRun" />
  </Protocol>
  <ChemistryDefinitions>
    <ChemistryDefinition Name="CompleteCycle">
      <ChemistryStep Description="Deblock" Repeat="1">
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="40" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="60" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="CRM" AspirationRate="1000" DispenseRate="2500" Volume="110" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="15000" ToPosition="0" />
        <PumpToFlowcell Solution="8" ReagentName="CWM" AspirationRate="1000" DispenseRate="2500" Volume="24" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="15000" ToPosition="0" />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1">
        <PumpToFlowcell Solution="8" ReagentName="CWM" AspirationRate="1500" DispenseRate="2500" Volume="95" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="6" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="140" SolutionDelay="0" Duration="0" ToPosition="0" />
      </ChemistryStep>
      <ChemistryStep Description="Incorporation" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="IMT" AspirationRate="1000" DispenseRate="2500" Volume="110" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="65" Duration="0" />
        <Wait Duration="25000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1000" DispenseRate="2500" Volume="24" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="15000" ToPosition="0" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="15000" />
        <PumpToFlowcell Solution="0" ReagentName="USM" AspirationRate="750" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="10000" ToPosition="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="FirstBase">
      <ChemistryStep Description="Incorporation" Repeat="1">
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="1" ToPosition="0" />
        <Temp Temperature="60" Duration="0" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="IMT" AspirationRate="1000" DispenseRate="2500" Volume="110" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="65" Duration="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="20000" ToPosition="0" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1000" DispenseRate="2500" Volume="24" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="15000" ToPosition="0" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="15000" />
        <PumpToFlowcell Solution="0" ReagentName="USM" AspirationRate="750" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="10000" ToPosition="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="EndDeblock">
      <ChemistryStep Description="Deblock" Repeat="1">
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="60" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="CRM" AspirationRate="1000" DispenseRate="2500" Volume="110" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="40000" ToPosition="0" />
        <PumpToFlowcell Solution="8" ReagentName="CWM" AspirationRate="1000" DispenseRate="2500" Volume="24" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="35000" ToPosition="0" />
        <PumpToFlowcell Solution="8" ReagentName="CWM" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <TempOff />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="CompleteCycle_Low">
      <ChemistryStep Description="Deblock" Repeat="1">
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="60" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="CRM" AspirationRate="1000" DispenseRate="2500" Volume="110" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="10000" ToPosition="0" />
        <PumpToFlowcell Solution="8" ReagentName="CWM" AspirationRate="1000" DispenseRate="2500" Volume="24" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="5000" ToPosition="0" />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1">
        <PumpToFlowcell Solution="8" ReagentName="CWM" AspirationRate="1500" DispenseRate="2500" Volume="95" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="6" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="140" SolutionDelay="0" Duration="0" ToPosition="0" />
      </ChemistryStep>
      <ChemistryStep Description="Incorporation" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="IMT" AspirationRate="1000" DispenseRate="2500" Volume="110" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="65" Duration="0" />
        <Wait Duration="25000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1000" DispenseRate="2500" Volume="24" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="15000" ToPosition="0" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="15000" />
        <PumpToFlowcell Solution="0" ReagentName="USM" AspirationRate="1500" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="10000" ToPosition="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="FirstBase_Low">
      <ChemistryStep Description="Incorporation" Repeat="1">
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="1" ToPosition="0" />
        <Temp Temperature="60" Duration="0" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="IMT" AspirationRate="1000" DispenseRate="2500" Volume="110" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="65" Duration="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="20000" ToPosition="0" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1000" DispenseRate="2500" Volume="24" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="15000" ToPosition="0" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="15000" />
        <PumpToFlowcell Solution="0" ReagentName="USM" AspirationRate="1500" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="10000" ToPosition="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="EndDeblock_Low">
      <ChemistryStep Description="Deblock" Repeat="1">
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="60" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="CRM" AspirationRate="1000" DispenseRate="2500" Volume="110" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="40000" ToPosition="0" />
        <PumpToFlowcell Solution="8" ReagentName="CWM" AspirationRate="1000" DispenseRate="2500" Volume="24" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="5000" />
        <DispenseAndWait Solution="0" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="35000" ToPosition="0" />
        <PumpToFlowcell Solution="8" ReagentName="CWM" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <TempOff />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="ResumeChemistry">
      <ChemistryStep Description="Prepare for scanning" Repeat="1">
        <Temp Temperature="20" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="USM" AspirationRate="750" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="15000" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="PauseChemistry">
      <ChemistryStep Description="Pause flowcell" Repeat="1">
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="100" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="PostRun">
      <ChemistryStep Description="Post-Run Flush" Repeat="1">
        <Temp Temperature="20" Duration="0" />
        <PumpToFlowcell Solution="2" ReagentName="PW1" AspirationRate="1500" DispenseRate="2500" Volume="2250" SolutionDelay="0" Duration="0" ToPosition="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="PostRunForOnBoardClustering">
      <ChemistryStep Description="Post-Run Flush" Repeat="1">
        <Temp Temperature="20" Duration="0" />
        <PumpToFlowcell Solution="2" ReagentName="PW1" AspirationRate="1000" DispenseRate="2500" Volume="2250" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToValvePosition Solution="2" ReagentName="PW1" AspirationRate="1000" DispenseRate="250" Volume="250" SolutionDelay="0" Duration="0" ToPosition="20" />
        <PumpToFlowcell Solution="0" ReagentName="TMP" AspirationRate="1000" DispenseRate="2500" Volume="250" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="2" ReagentName="PW1" AspirationRate="1000" DispenseRate="2500" Volume="1000" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToValvePosition Solution="2" ReagentName="PW1" AspirationRate="1000" DispenseRate="250" Volume="250" SolutionDelay="0" Duration="0" ToPosition="20" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="IndexPreparation">
      <ChemistryStep Description="IndexPreparation" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="FDR" AspirationRate="240" DispenseRate="2500" Volume="100" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="65" Duration="60000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="HP12" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="HP12" AspirationRate="60" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="40" Duration="60000" />
        <PumpToFlowcell Solution="0" ReagentName="HP12" AspirationRate="60" DispenseRate="2500" Volume="25" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="PETurnaround">
      <ChemistryStep Description="Deprotection" Repeat="1">
        <Temp Temperature="20" Duration="0" />
        <Wait Duration="120000" />
        <PumpToFlowcell Solution="0" ReagentName="FRM" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="FRM" AspirationRate="250" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="38" Duration="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="0" ReagentName="FRM" AspirationRate="250" DispenseRate="2500" Volume="25" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
      </ChemistryStep>
      <ChemistryStep Description="Preresynthesistempramp" Repeat="1">
        <Temp Temperature="55" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Description="Resynthesis" Repeat="12">
        <PumpToFlowcell Solution="0" ReagentName="FDR" AspirationRate="120" DispenseRate="2500" Volume="28" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="FPM" AspirationRate="120" DispenseRate="2500" Volume="28" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="AMS" AspirationRate="120" DispenseRate="2500" Volume="72" SolutionDelay="0" Duration="0" ToPosition="0" />
      </ChemistryStep>
      <ChemistryStep Description="Postresynthesis_wash" Repeat="1">
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="45000" />
      </ChemistryStep>
      <ChemistryStep Description="Linearisation 2" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="FLM2" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="FLM2" AspirationRate="250" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="38" Duration="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="0" ReagentName="FLM2" AspirationRate="250" DispenseRate="2500" Volume="25" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="0" ReagentName="FLM2" AspirationRate="250" DispenseRate="2500" Volume="25" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
      </ChemistryStep>
      <ChemistryStep Description="Rehybridisation" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="FDR" AspirationRate="240" DispenseRate="2500" Volume="100" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="65" Duration="60000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="HP11" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="HP11" AspirationRate="60" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="40" Duration="60000" />
        <PumpToFlowcell Solution="0" ReagentName="HP11" AspirationRate="60" DispenseRate="2500" Volume="25" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="ResumePEChemistry">
      <ChemistryStep Description="Prepare for scanning" Repeat="1">
        <Temp Temperature="20" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="PausePEChemistry">
      <ChemistryStep Description="Pause flowcell" Repeat="1">
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="2000" DispenseRate="2000" Volume="100" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="CBotTempHyb">
      <ChemistryStep Description="Amp-TempRamp" Repeat="1">
        <Temp Temperature="55" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Description="Amplification1" Repeat="28">
        <PumpToFlowcell Solution="0" ReagentName="FDR" AspirationRate="120" DispenseRate="2500" Volume="28" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="FPM" AspirationRate="120" DispenseRate="2500" Volume="28" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="AMS" AspirationRate="120" DispenseRate="2500" Volume="72" SolutionDelay="0" Duration="0" ToPosition="0" />
      </ChemistryStep>
      <ChemistryStep Description="Postamplificationwash" Repeat="1">
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Description="LinearizationPE" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="FLM1" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="FLM1" AspirationRate="240" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="38" Duration="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="0" ReagentName="FLM1" AspirationRate="240" DispenseRate="2500" Volume="25" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="0" ReagentName="FLM1" AspirationRate="240" DispenseRate="2500" Volume="25" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
      </ChemistryStep>
      <ChemistryStep Description="SBS Prime" Repeat="1">
        <Temp Temperature="20" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="IMT" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="USM" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="CRM" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="8" ReagentName="CWM" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="6" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
      </ChemistryStep>
      <ChemistryStep Description="Denaturation-Hybridization" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="FDR" AspirationRate="240" DispenseRate="2500" Volume="100" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="65" Duration="60000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="HP10" AspirationRate="1500" DispenseRate="2500" Volume="500" SolutionDelay="0" Duration="0" ToPosition="0" />
        <PumpToFlowcell Solution="0" ReagentName="HP10" AspirationRate="60" DispenseRate="2500" Volume="75" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="40" Duration="60000" />
        <PumpToFlowcell Solution="0" ReagentName="HP10" AspirationRate="60" DispenseRate="2500" Volume="25" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Wait Duration="300000" />
        <PumpToFlowcell Solution="5" ReagentName="USB" AspirationRate="1500" DispenseRate="2500" Volume="120" SolutionDelay="0" Duration="0" ToPosition="0" />
        <Temp Temperature="20" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
  </ChemistryDefinitions>
  <PumpDefinitions>
    <PumpDefinition Name="Default">
      <BeforeImagingEachLane Enabled="false">
        <Lane Solution="3" AspirationRate="120" DispenseRate="2500" Volume="12" SolutionDelay="0" Duration="0" ToPosition="0" Num="1" Surface="Bottom" />
        <Lane Solution="3" AspirationRate="120" DispenseRate="2500" Volume="12" SolutionDelay="0" Duration="0" ToPosition="0" Num="5" />
      </BeforeImagingEachLane>
    </PumpDefinition>
  </PumpDefinitions>
  <ReadDefinitions>
    <ReadDefinition Name="Read1" IsIndex="false" ForTemplateOnly="false">
      <Imaging ChemistryName="FirstBase" VariabilityName="Read1" Cycles="1" />
      <Imaging ChemistryName="CompleteCycle" VariabilityName="Read1" Cycles="150" />
      <Chemistry ChemistryName="End" />
    </ReadDefinition>
    <ReadDefinition Name="IndexRead" IsIndex="true" ForTemplateOnly="false">
      <Imaging ChemistryName="FirstBase" VariabilityName="IndexRead" Cycles="1" />
      <Imaging ChemistryName="CompleteCycle" VariabilityName="IndexRead" Cycles="11" />
      <Chemistry ChemistryName="End" />
    </ReadDefinition>
    <ReadDefinition Name="Read2" IsIndex="false" ForTemplateOnly="false">
      <Imaging ChemistryName="FirstBase" VariabilityName="Read2" Cycles="1" />
      <Imaging ChemistryName="CompleteCycle" VariabilityName="Read2" Cycles="150" />
      <Chemistry ChemistryName="End" />
    </ReadDefinition>
  </ReadDefinitions>
  <PrimeDefinitions>
    <PrimeDefinition Name="SbsPrime">
      <Prime Solution="15" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="15" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="15" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="15" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="14" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="14" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="14" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="14" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="13" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="13" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="13" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="13" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="5" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="5" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="5" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
      <Prime Solution="5" AspirationRate="0" DispenseRate="0" Volume="0" SolutionDelay="0" Duration="0" ToPosition="0" />
    </PrimeDefinition>
  </PrimeDefinitions>
  <ReagentDefinitions>
    <ReagentDefinition Name="SbsReagents" IsPairedEnd="false">
      <Reagent Name="IMT" Description="Incorporation Mix" ViciPosition="1">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="PW1" Description="250mL bottle with laboratory grade water" ViciPosition="2">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="USM" Description="Universal Scan Mix" ViciPosition="3">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="PW1" Description="250mL bottle with laboratory grade water" ViciPosition="4">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="USB" Description="Universal Sequencing Buffer" ViciPosition="5">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="USB" Description="Universal Sequencing Buffer" ViciPosition="6">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="CRM" Description="Cleavage Reagent Mastermix" ViciPosition="7">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="CWM" Description="Cleavage Wash Mix" ViciPosition="8">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="PW1" Description="10mL tube with laboratory grade water" ViciPosition="10">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="PW1" Description="10mL tube with laboratory grade water" ViciPosition="11">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="PW1" Description="10mL tube with laboratory grade water" ViciPosition="12">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="AMS" Description="Fast Amplification Mix" ViciPosition="13">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FPM" Description="Fast Amplification PreMix" ViciPosition="14">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FDR" Description="Fast Denaturation Reagent" ViciPosition="15">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="HP10" Description="Sequencing Primer Mix 1" ViciPosition="18">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FLS" Description="Fast Linearization Solution" ViciPosition="19">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="TMP" Description="Template" ViciPosition="20">
        <Sample>false</Sample>
      </Reagent>
    </ReagentDefinition>
    <ReagentDefinition Name="SbsReagents" IsPairedEnd="true">
      <Reagent Name="IMT" Description="Incorporation Mix" ViciPosition="1">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="PW1" Description="250mL bottle with laboratory grade water" ViciPosition="2">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="USM" Description="Universal Scan Mix" ViciPosition="3">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="PW1" Description="250mL bottle with laboratory grade water" ViciPosition="4">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="USB" Description="Universal Sequencing Buffer" ViciPosition="5">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="USB" Description="Universal Sequencing Buffer" ViciPosition="6">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="CRM" Description="Cleavage Reagent Mastermix" ViciPosition="7">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="CWM" Description="Advanced Wash Buffer " ViciPosition="8">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FRM" Description="Fast Resynthesis Mix" ViciPosition="10">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FLM2" Description="Fast Linearization Mix 2" ViciPosition="11">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FLM1" Description="Fast Linearization Mix 1" ViciPosition="12">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="AMS" Description="Fast Amplification Mix" ViciPosition="13">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FPM" Description="Fast Amplification PreMix" ViciPosition="14">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FDR" Description="Fast Denaturation Reagent" ViciPosition="15">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="HP11" Description="Primer Mix Read 2" ViciPosition="16">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="HP10" Description="Sequencing Primer Mix 1" ViciPosition="18">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="PW1" Description="10mL tube with laboratory grade water" ViciPosition="19">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="TMP" Description="Template" ViciPosition="20">
        <Sample>true</Sample>
      </Reagent>
    </ReagentDefinition>
    <ReagentDefinition Name="IndexingReagents" IsPairedEnd="false">
      <Reagent Name="USB" Description="Universal Sequencing Buffer" ViciPosition="5">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FDR" Description="Fast Denaturation Reagent" ViciPosition="15">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="HP12" Description="Indexing Sequencing Primer i7" ViciPosition="17">
        <Sample>false</Sample>
      </Reagent>
    </ReagentDefinition>
    <ReagentDefinition Name="PairedEndReagents" IsPairedEnd="false">
      <Reagent Name="USB" Description="Universal Sequencing Buffer" ViciPosition="5">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="AMS" Description="Fast Amplification Mix" ViciPosition="13">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FPM" Description="Fast Amplification PreMix" ViciPosition="14">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FDR" Description="Fast Denaturation Reagent" ViciPosition="15">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FLM2" Description="Fast Linearization Mix 2" ViciPosition="11">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="FRM" Description="Fast Resynthesis Mix" ViciPosition="10">
        <Sample>false</Sample>
      </Reagent>
      <Reagent Name="HP11" Description="Primer Mix 2" ViciPosition="16">
        <Sample>false</Sample>
      </Reagent>
    </ReagentDefinition>
  </ReagentDefinitions>
  <CycleWaitDefinitions />
</RecipeFile>