<?xml version="1.0"?>
<Protocol xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" Counts="1" Name="Step Collection" Concurrent="false" Version="P2BL_6.6.0">
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="Reagent Mixing" Concurrent="false" Version="6.0.0">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Dump 205uL WIM2">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="5000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="60" AspirateRate="1500" DispenseRate="1000" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="60" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="1000" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="55" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="55" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="5450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="1500" DispenseRate="1000" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="250" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Wash and clear FC">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="5000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="200" AspirateRate="1500" DispenseRate="1500" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="200" AspirateRate="1500" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
      </ChemistryStep>
      <ChemistryStep Counts="40" Name="Step Collection" Concurrent="false" Description="WIM-2 to WIM-1">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="23" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="4" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="46" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="4" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="46" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="4" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="46" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="4" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="46" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="4" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="23" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="250" DispenseRate="5000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Pick-up">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="250" DispenseRate="250" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="250" DispenseRate="250" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
      </ChemistryStep>
      <ChemistryStep Counts="8" Name="Step Collection" Concurrent="false" Description="WIM-1 to WIM-2">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="250" DispenseRate="3000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="2500" DispenseRate="4500" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="250" DispenseRate="5000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="2500" DispenseRate="4500" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="250" DispenseRate="5000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="2500" DispenseRate="4500" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="250" DispenseRate="5000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="WIM-1 to WIM-2 slow">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="250" DispenseRate="1500" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
      </ChemistryStep>
      <ChemistryStep Counts="15" Name="Step Collection" Concurrent="false" Description="WIM-2 to WIM-1">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="250" DispenseRate="5000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="WIM-2 to WIM-1 slow">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="1500" DispenseRate="1000" ReagentName="WIM-2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="250" DispenseRate="250" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
      </ChemistryStep>
      <ChemistryStep Counts="30" Name="Step Collection" Concurrent="false" Description="Jet Mixing WIM-1">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="2500" DispenseRate="4500" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="250" DispenseRate="5000" ReagentName="WIM-1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1450" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deprime WIM-1">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="38" AspirateRate="1000" DispenseRate="250" ReagentName="Air" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="8" DispenseRate="250" ReagentName="Air" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="25" DispenseRate="250" ReagentName="WIM-1" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="5" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Clean Lines">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="750" DispenseRate="1500" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="250" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="200" AspirateRate="250" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="750" DispenseRate="1500" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="250" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="750" DispenseRate="1500" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="250" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="On Board ExAmp Mixing Part 1" Concurrent="false" Version="6.1.0">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Prime Line">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="250" DispenseRate="250" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="250" DispenseRate="250" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="25" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <SetLed Counts="1" Name="SetLed" Color="Green" Channel0="35000" Channel1="35000" Channel2="35000" Channel3="35000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBEM1-before priming" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Prime HCX1,HCX2,HCX3">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="8" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14.1" DispenseRate="250" ReagentName="Reuse" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="8" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.7" AspirateRate="250" DispenseRate="250" ReagentName="HCX2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="13.7" DispenseRate="250" ReagentName="Reuse" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="8" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="13.4" DispenseRate="250" ReagentName="Reuse" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="8" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="13.4" DispenseRate="250" ReagentName="Reuse" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="8" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.7" AspirateRate="250" DispenseRate="250" ReagentName="HCX2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="13.7" DispenseRate="250" ReagentName="Reuse" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="8" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14.1" DispenseRate="250" ReagentName="Reuse" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="8" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="1500" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14.1" DispenseRate="250" ReagentName="Reuse" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBEM2-after priming" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Transfer HCX1 HCX2 and HCX3 step1">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="12.1" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="12.1" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.7" AspirateRate="250" DispenseRate="250" ReagentName="HCX2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.7" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.7" AspirateRate="250" DispenseRate="250" ReagentName="HCX2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.7" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="12.1" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="12.1" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBEM3-after 1st transfer" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Transfer HCX1 HCX2 and HCX3 step2">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="12.1" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="12.1" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.7" AspirateRate="250" DispenseRate="250" ReagentName="HCX2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.7" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.7" AspirateRate="250" DispenseRate="250" ReagentName="HCX2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.7" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="12.1" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="12.1" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBEM4-after 2nd transfer" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Transfer HCX1 HCX2 and HCX3 step3">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="12.1" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6.1" AspirateRate="250" DispenseRate="250" ReagentName="HCX1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="12.1" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.7" AspirateRate="250" DispenseRate="250" ReagentName="HCX2" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.7" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="6" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="5.4" AspirateRate="250" DispenseRate="250" ReagentName="HCX3" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="11.4" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="15450" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBEM5-after 3rd transfer" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Clear Pump">
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="75" DispenseRate="1500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="1500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="1500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Push to Reservoir">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="250" DispenseRate="250" ReagentName="HCX_Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="150" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="On Board ExAmp Mixing Part 2" Concurrent="false" Version="2.2.0">
      <ChemistryStep Counts="20" Name="Step Collection" Concurrent="false" Description="ExAMP Mixing">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="150" DispenseRate="1500" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Push ExAMP Back to Reservoir">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="250" DispenseRate="3000" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="150" DispenseRate="250" ReagentName="HCX_Mixing" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="450" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBEM6-end of mixing" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="On Board Denaturation and Dilution" Concurrent="false" Version="1.9.2">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="PreheatSampleHeater">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="SampleHeater" Temperature="65000" Tolerance="60000" SettleTimeMs="1000" RateOfChangeMillidegreesPerSecond="35000" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Prime TMP Line">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="10" AspirateRate="250" DispenseRate="1500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="10" DispenseRate="3500" Duration="500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Prime Whole Fluidic Line">
        <SetLed Counts="1" Name="SetLed" Color="Green" Channel0="35000" Channel1="35000" Channel2="35000" Channel3="35000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD1-From HCX Mix DTF Air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="500" DispenseRate="1500" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD2-WB6" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="500" DispenseRate="1500" ReagentName="WDR" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD3-WDR" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Transfer 20uL WDR to TMP">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="1500" ReagentName="WDR" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="20" DispenseRate="500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Push WDR to TMP with Air">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="250" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="500" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="250" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD4-PTF Air post purge" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="35" DispenseRate="500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="15" DispenseRate="3500" Duration="500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD5-Mix DTF Air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="12" Name="Step Collection" Concurrent="false" Description="Mix WDR and TMP by Air Bubbling">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="10" AspirateRate="250" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="10" DispenseRate="250" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Hydrate FC">
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD6-Post Air Mix" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="500" DispenseRate="1500" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD7-WB6 Wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="HeatSample">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="SampleHeater" Temperature="65000" Tolerance="2000" SettleTimeMs="1000" RateOfChangeMillidegreesPerSecond="35000" />
        <MoveSampleHeater Counts="1" Name="MoveSampleHeater" Engaged="true" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="480000" />
        <MoveSampleHeater Counts="1" Name="MoveSampleHeater" Engaged="false" />
        <DisableThermalZone Counts="1" Name="DisableThermalZone" Zone="SampleHeater" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Prime and Transfer HT1 to TMP">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="500" DispenseRate="1500" ReagentName="HT1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="500" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="500" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD8-PTF HT1" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="160" AspirateRate="500" DispenseRate="1500" ReagentName="HT1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="20" DispenseRate="5000" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="28" Name="Step Collection" Concurrent="false" Description="Pull/Push">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="12" AspirateRate="500" DispenseRate="1500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="17" DispenseRate="5000" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2000" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Push Back to TMP with Air">
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD9-After 28 push-pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="250" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD10-PTF 150uL Air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="40" AspirateRate="250" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD11-PTF 40uL Air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="25" DispenseRate="250" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="15" DispenseRate="3500" Duration="500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD12-DTF 25uL Air to TMP" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Asp WB6/Air">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="30" AspirateRate="500" DispenseRate="1500" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD13-PTF 30uL WB6" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="30" AspirateRate="250" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD14-PTF 30uL Air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="10" Name="Step Collection" Concurrent="false" Description="1 Pull/Push 12/14">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="12" AspirateRate="500" DispenseRate="1500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14" DispenseRate="5000" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Asp Air">
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD15-post 1st push-pull 12-14x10" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD16-post Air aspiration PTF 20 air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="10" Name="Step Collection" Concurrent="false" Description="2 Pull/Push 12/14">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="12" AspirateRate="500" DispenseRate="1500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14" DispenseRate="5000" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Asp Air">
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD17-post 2nd push-pull 12-14x10" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD18-post Air aspiration PTF 20 air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="10" Name="Step Collection" Concurrent="false" Description="3 Pull/Push 12/14">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="12" AspirateRate="500" DispenseRate="1500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14" DispenseRate="5000" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Asp Air">
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD19-post 3rd push-pull 12-14x10" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD20-post Air aspiration PTF 20 air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="10" Name="Step Collection" Concurrent="false" Description="4 Pull/Push 12/14">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="12" AspirateRate="500" DispenseRate="1500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14" DispenseRate="5000" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Asp Air">
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD21-post 4th push-pull 12-14x10" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD22-post Air aspiration PTF 20 air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="10" Name="Step Collection" Concurrent="false" Description="5 Pull/Push 12/14">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="12" AspirateRate="500" DispenseRate="1500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14" DispenseRate="5000" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Asp Air">
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD23-post 5th push-pull 12-14x10" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD24-post Air aspiration PTF 20 air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="10" Name="Step Collection" Concurrent="false" Description="6 Pull/Push 12/14">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="12" AspirateRate="500" DispenseRate="1500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14" DispenseRate="5000" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Asp Air">
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD25-post 6th push-pull 12-14x10" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD26-post Air aspiration PTF 20 air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="10" Name="Step Collection" Concurrent="false" Description="7 Pull/Push 12/14">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="12" AspirateRate="500" DispenseRate="1500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14" DispenseRate="5000" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Asp Air">
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD27-post 7th push-pull 12-14x10" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD28-post Air aspiration PTF 20 air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="10" Name="Step Collection" Concurrent="false" Description="8 Pull/Push 12/14">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="12" AspirateRate="500" DispenseRate="1500" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="500" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="14" DispenseRate="5000" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Push Back to TMP with Air">
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD29-post 8th push-pull 12-14x10" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="250" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD30-PTF 150 Air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="250" DispenseRate="1500" ReagentName="Air" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD31-PTF 50 Air" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="35" DispenseRate="250" ReagentName="TMP" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="15" DispenseRate="3500" Duration="500" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD32-Dispense 35 to TMP - 15 to waste" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Rehydrate FC">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="500" DispenseRate="1500" ReagentName="WB6" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="500" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="X-OBLDD33-Rehydrate FC - PTF 100 WB6 and DTW" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="On Board Cluster Generation" Concurrent="false" Version="2.4.9">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="OBCG Priming">
        <SetLed Counts="1" Name="SetLed" Color="Green" Channel0="35000" Channel1="35000" Channel2="35000" Channel3="35000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="250" DispenseRate="3000" ReagentName="WDR" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="TemplateDNAHybridization">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="5000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="75000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="40" AspirateRate="250" DispenseRate="3000" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="40" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="50" DispenseRate="3500" Duration="30000" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG1-start of 1st TMP incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="90000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG2-end of 1st TMP incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG3-post TMP wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="1st HCX Amp (22pt5 min)">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="5000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG4-post WB6 wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="170" AspirateRate="250" DispenseRate="3000" ReagentName="HCX_Mixing" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="170" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG5-post prime HCX line" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG6-post WB6 wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX_Mixing" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG7-start of 1st HCX incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="1350000" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="25" DispenseRate="1500" ReagentName="Reuse" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="25" DispenseRate="3500" Duration="2000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG8-end of 1st HCX incubation-post reuse push" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG9-post WB6 wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="TemplateDNAHybridization2">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="65000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WDR" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WDR" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="75000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="5000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="75000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="50" DispenseRate="3500" Duration="30000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG10-start of 2nd TMP incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="90000" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG11-end of 2nd TMP incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG19-post TMP WB6 wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="2nd HCX Amp (90 min)">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="5000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="35" AspirateRate="1500" DispenseRate="3000" ReagentName="Reuse" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="45" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX_Mixing" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG20-start of 2nd HCX incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="80" DispenseRate="3500" Duration="2400000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG21-end of 2nd HCX incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="190" AspirateRate="500" DispenseRate="3000" ReagentName="HCX_Air" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="190" DispenseRate="500" ReagentName="HCX_Mixing" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG22-HCXSave1" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG23-HCXSave2" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG24-HCXSave3" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG25-HCXSave4" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG26-HCXSave5" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Drain HCX">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX1" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG27-HCX1 depletion- 1st 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX1" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG28-HCX1 depletion- 2nd 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX1" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG29-HCX1 depletion- 3rd 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX1" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG30-HCX1 depletion- 4th 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX1" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG31-HCX1 depletion- 5th 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX1" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX2" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG32-HCX2 depletion- 1st 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX2" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG33-HCX2 depletion- 2nd 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX2" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG34-HCX2 depletion- 3rd 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX2" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG35-HCX2 depletion- 4th 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX2" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG36-HCX2 depletion- 5th 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX2" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX3" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG37-HCX3 depletion- 1st 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX3" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG38-HCX3 depletion- 2nd 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX3" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG39-HCX3 depletion- 3rd 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX3" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG40-HCX3 depletion- 4th 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX3" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG41-HCX3 depletion- 5th 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="1500" DispenseRate="3000" ReagentName="HCX3" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="Reuse" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG42-Reuse Well depletion- 1st 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="Reuse" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG43-Reuse Well depletion- 2nd 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="Reuse" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG44-Reuse Well depletion- 3rd 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="Reuse" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG45-Reuse Well depletion- 4th 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="Reuse" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG46-Reuse Well depletion- 5th 20uL pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="1500" DispenseRate="3000" ReagentName="Reuse" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="FC wash">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="3000" ReagentName="WB6" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="250" DispenseRate="3000" ReagentName="Air" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="250" DispenseRate="1500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="3" Name="Step Collection" Concurrent="false" Description="HCX line wash">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="100" DispenseRate="1500" ReagentName="HCX1" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="100" DispenseRate="1500" ReagentName="HCX2" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="100" DispenseRate="1500" ReagentName="HCX3" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="100" DispenseRate="1500" ReagentName="Reuse" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="120" AspirateRate="3000" DispenseRate="3000" ReagentName="HCX1" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="3000" DispenseRate="3000" ReagentName="Air" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="220" DispenseRate="1500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="120" AspirateRate="3000" DispenseRate="3000" ReagentName="HCX2" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="3000" DispenseRate="3000" ReagentName="Air" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="220" DispenseRate="1500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="120" AspirateRate="3000" DispenseRate="3000" ReagentName="HCX3" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="3000" DispenseRate="3000" ReagentName="Air" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="220" DispenseRate="1500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="120" AspirateRate="3000" DispenseRate="3000" ReagentName="Reuse" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="3000" DispenseRate="3000" ReagentName="Air" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="220" DispenseRate="1500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2000" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="WPK">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="3000" ReagentName="WPK" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG47-post HCX well flush - WPK prime - WB6 wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WPK" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG48-start of WPK incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="300000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG49-end of WPK incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="16" AspirateRate="1500" DispenseRate="3000" ReagentName="Air" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="Air" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="5" DispenseRate="3000" ReagentName="WPK" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="155" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Exo">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <MoveRotaryValveToReagentPort Counts="1" Name="MoveRotaryValveToReagentPort" ReagentName="WPM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="WEX" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <MoveRotaryValveToReagentPort Counts="1" Name="MoveRotaryValveToReagentPort" ReagentName="WPM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG50-post WEX prime - WB6 wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <MoveRotaryValveToReagentPort Counts="1" Name="MoveRotaryValveToReagentPort" ReagentName="WPM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WEX" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG51-start of WEX incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="720000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="WEX" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG52-WEX purge 1" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="WEX" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG53-WEX purge 2" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="WEX" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG54-WEX purge 3" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="WEX" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG55-WEX purge 4" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="WEX" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG56-WEX purge 5" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="1500" DispenseRate="3000" ReagentName="WEX" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="3000" ReagentName="WCM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="0" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG57-WCM Priming" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WCM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="51" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="10000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="117" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="3000" ReagentName="WB7" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG58-EXO-WB7 Priming" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="56" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="209" DispenseRate="3500" Duration="0" />
        <MoveRotaryValveToReagentPort Counts="1" Name="MoveRotaryValveToReagentPort" ReagentName="WPM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="3" Name="Step Collection" Concurrent="false" Description="WEX line wash">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="100" DispenseRate="1500" ReagentName="WEX" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="120" AspirateRate="3000" DispenseRate="3000" ReagentName="WEX" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="3000" DispenseRate="3000" ReagentName="Air" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="220" DispenseRate="1500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2000" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Repair Prime">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="55000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="WAM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="WPM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="WDR" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="60" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG59-post WAM-WPM-WDR prime - WB6 wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="3" Name="Step Collection" Concurrent="false" Description="Repair">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WDR" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="7000" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG60-post WDR introduction" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WPM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG61-post WPM introduction" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WAM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="30000" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG62-post WAM introduction" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Linearization">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="45000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="3000" ReagentName="WLM1" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG63-post WLM1 prime - WB6 wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WLM1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG64-post 1st WLM1 introduction" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="15" AspirateRate="1500" DispenseRate="3000" ReagentName="WLM1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="600000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG65-post 2nd WLM1 pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="15" AspirateRate="1500" DispenseRate="3000" ReagentName="WLM1" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="600000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XX-OBCG66-post 3rd WLM1 pull" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="250" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deprime WAM">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="18" AspirateRate="1000" DispenseRate="250" ReagentName="Air" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="8" DispenseRate="250" ReagentName="Air" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="5" DispenseRate="250" ReagentName="WAM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="5" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="First Read Preparation" Concurrent="false" Version="1.1.3">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="ReadPrep">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="3000" ReagentName="WST" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="0" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XXX-FRP1-WST Priming" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="3000" ReagentName="WIM-1" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XXX-FRP2-WIM Priming" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="3000" ReagentName="WSM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XXX-FRP3-WSM Priming" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB7" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="100" DispenseRate="1500" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="50" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="65000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XXX-FRP4-post SBS reagent prime - OBCG reagent flush out" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WDR" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XXX-FRP5-start of WDR incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="60000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XXX-FRP6-end of WDR incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <MoveRotaryValveToReagentPort Counts="1" Name="MoveRotaryValveToReagentPort" ReagentName="WPM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="HP10" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <MoveRotaryValveToReagentPort Counts="1" Name="MoveRotaryValveToReagentPort" ReagentName="WPM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XXX-FRP7-post WB6 wash - HP10 prime - WB6 wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <MoveRotaryValveToReagentPort Counts="1" Name="MoveRotaryValveToReagentPort" ReagentName="WPM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="HP10" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XXX-FRP8-start of HP10 incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="60000" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XXX-FRP9-end of HP10 incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <MoveRotaryValveToReagentPort Counts="1" Name="MoveRotaryValveToReagentPort" ReagentName="WPM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="2500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="200" AspirateRate="500" DispenseRate="3000" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="2500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="200" AspirateRate="500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="2500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="200" AspirateRate="1000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="200" DispenseRate="2500" ReagentName="TMP" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="200" AspirateRate="1000" DispenseRate="3000" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="2500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="200" AspirateRate="1000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="200" DispenseRate="2500" ReagentName="TMP" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="200" AspirateRate="1000" DispenseRate="3000" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="2500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="150" DispenseRate="2500" ReagentName="TMP" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="200" AspirateRate="1000" DispenseRate="3000" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="200" DispenseRate="2500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="100" DispenseRate="1500" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="50" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="XXX-FRP10-post WB6 wash" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ReadDefinition Counts="1" Name="Read 1" Concurrent="false">
      <ReadStep Counts="1" Name="First base" Concurrent="false" Cycles="1">
        <SetLed Counts="1" Name="SetLed" Color="Green" Channel0="35000" Channel1="35000" Channel2="35000" Channel3="35000" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="63000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="First Base" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="First Base Incorp">
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="59" AspirateRate="500" DispenseRate="3000" ReagentName="WIM-1" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WIM-1" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="25000" />
              <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="60" DispenseRate="3500" Duration="22000" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="23" DispenseRate="3000" ReagentName="WIM-1" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <NormalizeFrameCount Counts="1" Name="NormalizeFrameCount" ExposureTime="1500" StartingFrameCount="5" SaturationThreshold="2" FrameCountIncrement="1" MaxIterations="2" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="105" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="45" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
        <Imaging Counts="1" Name="Imaging" Channel="1" DefaultExposureTime="1500" DarkImage="false" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="Chemistry Step 2 Preparation" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WST" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WST" />
              <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4000" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="21" DispenseRate="3000" ReagentName="WST" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="26" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="2" DefaultExposureTime="1500" DarkImage="false" />
        </StepCollection>
      </ReadStep>
      <ReadStep Counts="1" Name="Complete Cycle Full" Concurrent="false" Cycles="read1cycles-1">
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WCM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WCM" />
                <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="124" DispenseRate="3500" Duration="14000" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="20" DispenseRate="3000" ReagentName="WCM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="86" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="31" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="56" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="36" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="36" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="155" DispenseRate="3500" Duration="0" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="31" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="31" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="Chemistry Step 1" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Incorp">
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="59" AspirateRate="500" DispenseRate="3000" ReagentName="WIM-1" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WIM-1" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="23500" />
              <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="60" DispenseRate="3500" Duration="22000" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 1 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Incorp">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="23" DispenseRate="3000" ReagentName="WIM-1" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WST" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WST" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="1" DefaultExposureTime="1500" DarkImage="false" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4000" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="21" DispenseRate="3000" ReagentName="WST" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="26" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="2" DefaultExposureTime="1500" DarkImage="false" />
        </StepCollection>
      </ReadStep>
    </ReadDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="End Deblock" Concurrent="false" Version="4.0.0">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="45" AspirateRate="1500" DispenseRate="3000" ReagentName="WCM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="125" DispenseRate="3500" Duration="15000" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="20" DispenseRate="3000" ReagentName="WCM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="80" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="25" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="3000" DispenseRate="3000" ReagentName="WB7" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="155" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="33" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="Index 1 Preparation" Concurrent="false" Version="1.0.1">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Index1 Preparation">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="65000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WDR" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="90000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="HP14" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="HP14" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="30000" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="60000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ReadDefinition Counts="1" Name="Index 1" Concurrent="false">
      <ReadStep Counts="1" Name="First base" Concurrent="false" Cycles="1">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="63000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="First Base" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="First Base Incorp">
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="59" AspirateRate="500" DispenseRate="3000" ReagentName="WIM-1" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WIM-1" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="25000" />
              <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="60" DispenseRate="3500" Duration="22000" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="23" DispenseRate="3000" ReagentName="WIM-1" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <NormalizeFrameCount Counts="1" Name="NormalizeFrameCount" ExposureTime="1000" StartingFrameCount="5" SaturationThreshold="2" FrameCountIncrement="1" MaxIterations="2" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="105" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="45" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
        <Imaging Counts="1" Name="Imaging" Channel="1" DefaultExposureTime="1000" DarkImage="false" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="Chemistry Step 2 Preparation" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WST" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WST" />
              <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4000" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="21" DispenseRate="3000" ReagentName="WST" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="26" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="2" DefaultExposureTime="1000" DarkImage="false" />
        </StepCollection>
      </ReadStep>
      <ReadStep Counts="1" Name="Complete Cycle Full" Concurrent="false" Cycles="index1cycles-1">
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WCM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WCM" />
                <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="124" DispenseRate="3500" Duration="14000" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="20" DispenseRate="3000" ReagentName="WCM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="86" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="31" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="56" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="36" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="36" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="155" DispenseRate="3500" Duration="0" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="31" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="31" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="Chemistry Step 1" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Incorp">
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="59" AspirateRate="500" DispenseRate="3000" ReagentName="WIM-1" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WIM-1" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="23500" />
              <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="60" DispenseRate="3500" Duration="22000" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 1 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Incorp">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="23" DispenseRate="3000" ReagentName="WIM-1" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WST" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WST" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="1" DefaultExposureTime="1000" DarkImage="false" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4000" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="21" DispenseRate="3000" ReagentName="WST" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="26" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="2" DefaultExposureTime="1000" DarkImage="false" />
        </StepCollection>
      </ReadStep>
    </ReadDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="End Deblock" Concurrent="false" Version="4.0.0">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="45" AspirateRate="1500" DispenseRate="3000" ReagentName="WCM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="125" DispenseRate="3500" Duration="15000" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="20" DispenseRate="3000" ReagentName="WCM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="80" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="25" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="3000" DispenseRate="3000" ReagentName="WB7" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="155" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="33" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="Paired End Turnaround" Concurrent="false" Version="1.2.1">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="PE Prime">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="WPM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deprotection">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="65000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WDR" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="60000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="PE1-WDR Flush" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="WRM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WRM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="300000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="PE2-WRM Flush 1" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="1500" DispenseRate="3000" ReagentName="WRM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="300000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="PE3-WRM Flush 2" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WCM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="51" DispenseRate="3500" Duration="0" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="10000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="117" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="56" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="209" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Pre-resynthesis_tempramp">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="55000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="WAM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WAM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="120000" />
      </ChemistryStep>
      <ChemistryStep Counts="11" Name="Step Collection" Concurrent="false" Description="Resynthesis">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WDR" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="7000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WPM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WAM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="30000" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Linearisation 2">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="WLM2" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WLM2" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="300000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="PE4-WLM2 Flush 1" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="15" AspirateRate="250" DispenseRate="3000" ReagentName="WLM2" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="15" DispenseRate="3500" Duration="300000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="PE5-WLM2 Flush 2" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="15" AspirateRate="250" DispenseRate="3000" ReagentName="WLM2" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="15" DispenseRate="3500" Duration="300000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="PE6-WLM2 Flush 3" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="ProteinaseK">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="500" DispenseRate="3000" ReagentName="WPK" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WPK" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="PE7-WPK Flush" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="300000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deprime WAM">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="18" AspirateRate="1000" DispenseRate="250" ReagentName="Air" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="8" DispenseRate="250" ReagentName="Air" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="5" DispenseRate="250" ReagentName="WAM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="5" DispenseRate="3500" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="Index 2 Preparation" Concurrent="false" Version="1.0.1">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Index2 Preparation">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="65000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WDR" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="90000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="HP14-2" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="HP14-2" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="30000" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="60000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ReadDefinition Counts="1" Name="Index 2" Concurrent="false">
      <ReadStep Counts="1" Name="First base" Concurrent="false" Cycles="1">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="63000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="First Base" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="First Base Incorp">
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="59" AspirateRate="500" DispenseRate="3000" ReagentName="WIM-1" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WIM-1" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="25000" />
              <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="60" DispenseRate="3500" Duration="22000" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="23" DispenseRate="3000" ReagentName="WIM-1" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <NormalizeFrameCount Counts="1" Name="NormalizeFrameCount" ExposureTime="1000" StartingFrameCount="5" SaturationThreshold="2" FrameCountIncrement="1" MaxIterations="2" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="105" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="45" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
        <Imaging Counts="1" Name="Imaging" Channel="1" DefaultExposureTime="1000" DarkImage="false" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="Chemistry Step 2 Preparation" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WST" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WST" />
              <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4000" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="21" DispenseRate="3000" ReagentName="WST" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="26" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="2" DefaultExposureTime="1000" DarkImage="false" />
        </StepCollection>
      </ReadStep>
      <ReadStep Counts="1" Name="Complete Cycle Full" Concurrent="false" Cycles="index2cycles-1">
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WCM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WCM" />
                <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="124" DispenseRate="3500" Duration="14000" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="20" DispenseRate="3000" ReagentName="WCM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="86" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="31" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="56" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="36" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="36" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="155" DispenseRate="3500" Duration="0" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="31" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="31" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="Chemistry Step 1" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Incorp">
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="59" AspirateRate="500" DispenseRate="3000" ReagentName="WIM-1" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WIM-1" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="23500" />
              <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="60" DispenseRate="3500" Duration="22000" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 1 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Incorp">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="23" DispenseRate="3000" ReagentName="WIM-1" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WST" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WST" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="1" DefaultExposureTime="1000" DarkImage="false" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4000" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="21" DispenseRate="3000" ReagentName="WST" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="26" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="2" DefaultExposureTime="1000" DarkImage="false" />
        </StepCollection>
      </ReadStep>
    </ReadDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="End Deblock" Concurrent="false" Version="4.0.0">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="45" AspirateRate="1500" DispenseRate="3000" ReagentName="WCM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="125" DispenseRate="3500" Duration="15000" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="20" DispenseRate="3000" ReagentName="WCM" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="80" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="25" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="3000" DispenseRate="3000" ReagentName="WB7" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="155" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="33" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="Second Read Preparation" Concurrent="false" Version="1.1.1">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="SecondReadPreparation">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="30000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="3000" ReagentName="WST" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="0" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="SRP1-WST Prime" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="3000" ReagentName="WIM-1" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="SRP2-WIM-1 Prime" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="3000" ReagentName="WCM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="SRP3-WCM Prime" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="100" AspirateRate="250" DispenseRate="3000" ReagentName="WSM" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="100" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="SRP4-WSM Prime" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB7" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="SRP5-WB7 Prime" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="65000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="WDR" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="90000" />
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="SRP6-WDR Incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="40000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <PauseChemistry Counts="1" Name="PauseChemistry" Duration="60000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="250" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="250" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="100" DispenseRate="1500" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="50" DispenseRate="3500" Duration="0" />
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="65000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="20" AspirateRate="250" DispenseRate="3000" ReagentName="HP11" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="20" DispenseRate="3500" Duration="0" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="SRP7-HP11 Prime" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="3000" DispenseRate="3000" ReagentName="WB6" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="70" AspirateRate="1500" DispenseRate="3000" ReagentName="HP11" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="70" DispenseRate="3500" Duration="30000" />
        <Imaging Counts="1" Name="Imaging" Channel="None" DefaultExposureTime="1500" DarkImage="false" ImageName="SRP8-HP11 Incubation" />
        <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
        <UninitializeImaging Counts="1" Name="UninitializeImaging" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ReadDefinition Counts="1" Name="Read 2" Concurrent="false">
      <ReadStep Counts="1" Name="First base" Concurrent="false" Cycles="1">
        <SetThermalZoneTemp Counts="1" Name="SetThermalZoneTemp" Zone="CmosHeater" Temperature="63000" Tolerance="3000" SettleTimeMs="60000" RateOfChangeMillidegreesPerSecond="35000" />
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="First Base" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="First Base Incorp">
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="59" AspirateRate="500" DispenseRate="3000" ReagentName="WIM-1" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WIM-1" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="25000" />
              <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="60" DispenseRate="3500" Duration="22000" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="23" DispenseRate="3000" ReagentName="WIM-1" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <InitializeImaging Counts="1" Name="InitializeImaging" />
        <NormalizeFrameCount Counts="1" Name="NormalizeFrameCount" ExposureTime="1500" StartingFrameCount="5" SaturationThreshold="2" FrameCountIncrement="1" MaxIterations="2" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="105" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="45" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
        <Imaging Counts="1" Name="Imaging" Channel="1" DefaultExposureTime="1500" DarkImage="false" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="150" DispenseRate="3500" Duration="0" />
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="Chemistry Step 2 Preparation" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WST" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WST" />
              <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4000" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="21" DispenseRate="3000" ReagentName="WST" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="26" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="2" DefaultExposureTime="1500" DarkImage="false" />
        </StepCollection>
      </ReadStep>
      <ReadStep Counts="1" Name="Complete Cycle Full" Concurrent="false" Cycles="read2cycles-1">
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WCM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WCM" />
                <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="124" DispenseRate="3500" Duration="14000" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="20" DispenseRate="3000" ReagentName="WCM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="86" AspirateRate="1500" DispenseRate="3000" ReagentName="TMP" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="31" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="56" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="36" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="36" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1000" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="155" DispenseRate="3500" Duration="0" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="31" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="31" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="" Concurrent="false">
          <ChemistryDefinition Counts="1" Name="Chemistry Step 1" Concurrent="false" Version="4.1.2">
            <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Incorp">
              <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="59" AspirateRate="500" DispenseRate="3000" ReagentName="WIM-1" />
              <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WIM-1" />
              <PauseChemistry Counts="1" Name="PauseChemistry" Duration="23500" />
              <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="60" DispenseRate="3500" Duration="22000" />
            </ChemistryStep>
          </ChemistryDefinition>
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 1 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Incorp">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="23" DispenseRate="3000" ReagentName="WIM-1" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="50" AspirateRate="1500" DispenseRate="3000" ReagentName="WST" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WST" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="1" DefaultExposureTime="1500" DarkImage="false" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Chemistry Step 2" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="4000" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <UninitializeImaging Counts="1" Name="UninitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Image 2 Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="StrepC">
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="21" DispenseRate="3000" ReagentName="WST" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="36" AspirateRate="1500" DispenseRate="3000" ReagentName="WB7" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB7" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="51" AspirateRate="1500" DispenseRate="3000" ReagentName="WSM" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WSM" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <InitializeImaging Counts="1" Name="InitializeImaging" />
        </StepCollection>
        <StepCollection Counts="1" Name="Step Collection" Concurrent="true">
          <StepCollection Counts="1" Name="" Concurrent="false">
            <ChemistryDefinition Counts="1" Name="Deblock Preparation" Concurrent="false" Version="4.1.2">
              <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Deblock">
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="2500" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="22" DispenseRate="3000" ReagentName="WSM" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="40" DispenseRate="3000" ReagentName="TMP" />
                <PauseChemistry Counts="1" Name="PauseChemistry" Duration="300" />
                <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="26" AspirateRate="1500" DispenseRate="3000" ReagentName="WB6" />
                <DispenseToFlowcell Counts="1" Name="DispenseToFlowcell" Volume="6" DispenseRate="3000" ReagentName="WB6" />
                <LogLeakDetectionVoltage Counts="1" Name="LogLeakDetectionVoltage" />
              </ChemistryStep>
            </ChemistryDefinition>
          </StepCollection>
          <Imaging Counts="1" Name="Imaging" Channel="2" DefaultExposureTime="1500" DarkImage="false" />
        </StepCollection>
      </ReadStep>
    </ReadDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="TMP Purge" Concurrent="false" Version="1.0.0">
      <ChemistryStep Counts="2" Name="Step Collection" Concurrent="false" Description="TMP Purge">
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="250" AspirateRate="5000" DispenseRate="5000" ReagentName="TMP" />
        <DispenseToWaste Counts="1" Name="DispenseToWaste" Volume="250" DispenseRate="5000" Duration="0" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
  <StepCollection Counts="1" Name="" Concurrent="false">
    <ChemistryDefinition Counts="1" Name="End Read" Concurrent="false" Version="3.0.0">
      <ChemistryStep Counts="1" Name="Step Collection" Concurrent="false" Description="Endstate">
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
        <DisableThermalZone Counts="1" Name="DisableThermalZone" Zone="CmosHeater" />
        <PumpToFlowcell Counts="1" Name="PumpToFlowcell" Volume="150" AspirateRate="1500" DispenseRate="3000" ReagentName="Air" />
        <ClearSyringe Counts="1" Name="ClearSyringe" Duration="0" />
        <MoveRotaryValveToReagentPort Counts="1" Name="MoveRotaryValveToReagentPort" ReagentName="Block" />
      </ChemistryStep>
    </ChemistryDefinition>
  </StepCollection>
</Protocol>